CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:gcamp
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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notes:['The median filter highlights cell bodies.']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
    Select the input image:gcamp
    Name the output image:gcamp_median
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['The tubeness filter highlights neurites.']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
    Select the input image:gcamp
    Name the output image:gcamp_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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
ImageMath:[module_num:7|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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:gcamp_median
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:gcamp_tubeness
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:['proto_neurons are objects found using a conservative threshold that typically finds cell bodies.']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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:proto_neuron
    Typical diameter of objects, in pixel units (Min,Max):5,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:0.80
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:9|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notes:['The likely cell body objects are then extended to segment the neurites.']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
    Select the input objects:proto_neuron
    Name the objects to be identified:neuronFragment
    Select the method to identify the secondary objects:Propagation
    Select the input image:ImageAfterMath
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:10|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notes:['The background, defined as everything that wasn’t identified as an object earlier in the pipeline, i.e. everywhere there isn’t a neuron, is also identified as an object.']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
    Select the input image:gcamp
    Name the output image:gcamp_background
    Use objects or an image as a mask?:Objects
    Select object for mask:neuronFragment
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:11|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
    Select the image to measure:gcamp_background
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:gcamp
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:gcamp
    Select objects to measure:neuronFragment

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:neuronFragment
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:14|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:gcamp
    Select objects to measure:neuronFragment
    Texture scale to measure:3
    Measure images or objects?:Objects

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:neuronFragment
    Name the output image:neuronFragment
    Select the color format:uint16
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:neuronFragment
    Select method for constructing file names:From image filename
    Select image name for file prefix:gcamp
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_neuronFragments
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|gcampsegmentation
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|gcampsegmentation
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:gcampsegmentation_
    Overwrite existing files without warning?:Yes
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